<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.4.0-preview">
  <Description>Renders the sphere map from the perspective of a viewing window of the specified size, position and orientation relative to the origin.</Description>
  <Workflow xmlns:xsd="http://www.w3.org/2001/XMLSchema" xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance" xmlns:q1="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders" xmlns="https://bonsai-rx.org/2018/workflow">
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateVector2">
          <q1:X>20</q1:X>
          <q1:Y>15</q1:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateUniform">
          <q1:UniformName>scale</q1:UniformName>
          <q1:ShaderName>SphereMap</q1:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:DrawMesh">
          <q1:ShaderName>SphereMap</q1:ShaderName>
          <q1:MeshName>Quad</q1:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:UpdateUniform">
          <q1:UniformName>transform</q1:UniformName>
          <q1:ShaderName>SphereMap</q1:ShaderName>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:CreateMatrix4">
          <q1:Row0>
            <q1:X>1</q1:X>
            <q1:Y>0</q1:Y>
            <q1:Z>0</q1:Z>
            <q1:W>0</q1:W>
          </q1:Row0>
          <q1:Row1>
            <q1:X>0</q1:X>
            <q1:Y>1</q1:Y>
            <q1:Z>0</q1:Z>
            <q1:W>0</q1:W>
          </q1:Row1>
          <q1:Row2>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
            <q1:Z>1</q1:Z>
            <q1:W>0</q1:W>
          </q1:Row2>
          <q1:Row3>
            <q1:X>0</q1:X>
            <q1:Y>0</q1:Y>
            <q1:Z>0</q1:Z>
            <q1:W>1</q1:W>
          </q1:Row3>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="X" DisplayName="Width" Description="The width of the viewing window, in metric units." Category="Dimensions" />
        <Property Name="Y" DisplayName="Height" Description="The height of the viewing window, in metric units." Category="Dimensions" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Row0" Category="Extrinsics" />
        <Property Name="Row1" Category="Extrinsics" />
        <Property Name="Row2" Category="Extrinsics" />
        <Property Name="Row3" Category="Extrinsics" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="q1:BindTexture">
          <q1:TextureSlot>Texture0</q1:TextureSlot>
          <q1:ShaderName>SphereMap</q1:ShaderName>
          <q1:TextureTarget>TextureCubeMap</q1:TextureTarget>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="4" Label="Source1" />
      <Edge From="2" To="6" Label="Source1" />
      <Edge From="3" To="2" Label="Source1" />
      <Edge From="4" To="3" Label="Source1" />
      <Edge From="5" To="9" Label="Source1" />
      <Edge From="7" To="0" Label="Source2" />
      <Edge From="8" To="4" Label="Source2" />
      <Edge From="9" To="0" Label="Source1" />
    </Edges>
  </Workflow>
  <ExtensionTypes>
    <Type>Bonsai.Shaders.CreateVector2, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.UpdateUniform, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.DrawMesh, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.CreateMatrix4, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
    <Type>Bonsai.Shaders.BindTexture, Bonsai.Shaders, Version=0.19.0.0, Culture=neutral, PublicKeyToken=null</Type>
  </ExtensionTypes>
</WorkflowBuilder>