<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Draws parameterized 2D sinewave gratings.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="LocationX" />
        <Property Name="LocationY" />
        <Property Name="Layer" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Value" DisplayName="Angle" Description="The angle of the grating stimulus." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="bv:AngleProperty">
          <bv:Value>0</bv:Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Angle" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SpatialFrequency" />
        <Property Name="TemporalFrequency" />
        <Property Name="Phase" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SquareWave" />
        <Property Name="Contrast" />
        <Property Name="DutyCycle" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Radius" />
        <Property Name="Aperture" />
        <Property Name="Opacity" />
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ExtentX" />
        <Property Name="ExtentY" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Transform</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" DisplayName="LocationX" />
              <Property Name="Y" DisplayName="LocationY" />
              <Property Name="Z" DisplayName="Layer" Description="The optional drawing overlay priority. Lower numbers appear below higher numbers." />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Translate">
                <gl:Order>Prepend</gl:Order>
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>0</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" DisplayName="ExtentX" Description="The size of the grating stimulus in the x-axis." />
              <Property Name="Y" DisplayName="ExtentY" Description="The size of the grating stimulus in the y-axis." />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Scale">
                <gl:Order>Prepend</gl:Order>
                <gl:X>1</gl:X>
                <gl:Y>1</gl:Y>
                <gl:Z>1</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>transform</gl:UniformName>
                <gl:ShaderName>Gratings</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Angle" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateRotationZ">
                <gl:Angle>0</gl:Angle>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>rotation</gl:UniformName>
                <gl:ShaderName>Gratings</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="7" Label="Source1" />
            <Edge From="6" To="7" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>PhaseFrequency</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>TimeStep.ElapsedTime</Selector>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>single(it)</scr:Expression>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="TemporalFrequency" Description="The sliding speed of the grating stimulus, in cycles per second." Category="Stimulus Parameters" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="FloatProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Accumulate" />
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="ExtentX" />
              <Property Name="ExtentY" />
              <Property Name="Angle" />
              <Property Name="SpatialFrequency" Description="The spatial frequency of the gratings, in cycles per degree." Category="Stimulus Parameters" />
            </Expression>
            <Expression xsi:type="GroupWorkflow">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="ExtentX" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="gl:Scale,sys:Single">
                    <MemberName>X</MemberName>
                    <Value>1</Value>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="ExtentY" />
                  </Expression>
                  <Expression xsi:type="PropertySource" TypeArguments="gl:Scale,sys:Single">
                    <MemberName>Y</MemberName>
                    <Value>1</Value>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="Angle" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="ExternalizedMapping">
                    <Property Name="Value" DisplayName="SpatialFrequency" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="FloatProperty">
                      <Value>10</Value>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>single(
Math.Sqrt((Item1 * Math.Cos(Item4) * Item1 * Math.Cos(Item4)) +
(Item2 * Math.Sin(Item4) * Item2 * Math.Sin(Item4))) * Item3
)</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="2" Label="Source1" />
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="0" To="6" Label="Source1" />
                  <Edge From="0" To="8" Label="Source1" />
                  <Edge From="1" To="2" Label="Source2" />
                  <Edge From="2" To="9" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="9" Label="Source2" />
                  <Edge From="5" To="6" Label="Source2" />
                  <Edge From="6" To="9" Label="Source4" />
                  <Edge From="7" To="8" Label="Source2" />
                  <Edge From="8" To="9" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="11" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>frequency</gl:UniformName>
                <gl:ShaderName>Gratings</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Phase" Description="The optional phase offset of the grating stimulus, in degrees." Category="Stimulus Parameters" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bv:AngleProperty">
                <bv:Value>0</bv:Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it / (2 * Math.PI)</scr:Expression>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Subtract">
              <Operand xsi:type="FloatProperty">
                <Value>0</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2,Item1</Selector>
            </Expression>
            <Expression xsi:type="Divide" />
            <Expression xsi:type="MemberSelector" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>phase</gl:UniformName>
                <gl:ShaderName>Gratings</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="8" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="14" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="15" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source2" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Contrast</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="DutyCycle" Description="The duty cycle used to modulate square wave gratings." Category="Square Gratings" />
              <Property Name="HasValue" DisplayName="SquareWave" Description="A value specifying whether to use a sine or square wave function as a basis for the stimulus." Category="Square Gratings" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bv:OptionalFloatProperty">
                <bv:Value xsi:nil="true" />
                <bv:HasValue>false</bv:HasValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="GetValueOrDefault">
              <Operand xsi:type="FloatProperty">
                <Value>-1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>threshold</gl:UniformName>
                <gl:ShaderName>Gratings</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Contrast" Description="The contrast of the grating stimulus, where zero is no contrast, and one is maximum contrast." Category="Stimulus Parameters" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>contrast</gl:UniformName>
                <gl:ShaderName>Gratings</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Border</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Radius" Description="The normalized radius of the clipping mask applied to the stimulus." Category="Stimulus Parameters" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>radius</gl:UniformName>
                <gl:ShaderName>Gratings</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Aperture" Description="The optional variance of the gaussian mask applied to the stimulus. A value of zero specifies that no mask should be applied." Category="Stimulus Parameters" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>aperture</gl:UniformName>
                <gl:ShaderName>Gratings</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Opacity" Description="The normalized opacity of the stimulus. Zero is fully transparent, and one is fully opaque." Category="Stimulus Parameters" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="FloatProperty">
                <Value>1</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>opacity</gl:UniformName>
                <gl:ShaderName>Gratings</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="8" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawMesh">
          <gl:ShaderName>Gratings</gl:ShaderName>
          <gl:MeshName>Quad</gl:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="9" Label="Source1" />
      <Edge From="1" To="9" Label="Source2" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="9" Label="Source4" />
      <Edge From="4" To="10" Label="Source4" />
      <Edge From="5" To="10" Label="Source2" />
      <Edge From="6" To="11" Label="Source2" />
      <Edge From="7" To="12" Label="Source2" />
      <Edge From="8" To="9" Label="Source3" />
      <Edge From="8" To="10" Label="Source3" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>