<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.5.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Description>Draws an affine transformed 2D image.</Description>
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="ExternalizedProperty">
        <MemberName>Value</MemberName>
        <Name>Angle</Name>
        <Description>The angle of the image.</Description>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="bv:AngleProperty">
          <bv:Value>0</bv:Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Angle" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="TextureName" Description="The name of the texture to display." />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:BindTexture">
          <gl:TextureSlot>Texture0</gl:TextureSlot>
          <gl:ShaderName>Image</gl:ShaderName>
          <gl:TextureName />
          <gl:TextureTarget>Texture2D</gl:TextureTarget>
        </Combinator>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ExtentX" />
        <Property Name="ExtentY" />
        <Property Name="LocationX" />
        <Property Name="LocationY" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Transform</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" DisplayName="LocationX" />
              <Property Name="Y" DisplayName="LocationY" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Translate">
                <gl:Order>Prepend</gl:Order>
                <gl:X>0</gl:X>
                <gl:Y>0</gl:Y>
                <gl:Z>0</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" DisplayName="ExtentX" />
              <Property Name="Y" DisplayName="ExtentY" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:Scale">
                <gl:Order>Prepend</gl:Order>
                <gl:X>1</gl:X>
                <gl:Y>1</gl:Y>
                <gl:Z>1</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Angle" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RotateZ">
                <gl:Order>Prepend</gl:Order>
                <gl:Angle>0</gl:Angle>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>transform</gl:UniformName>
                <gl:ShaderName>Image</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="4" Label="Source1" />
            <Edge From="3" To="4" Label="Source2" />
            <Edge From="4" To="6" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="ScaleX" />
        <Property Name="ScaleY" />
        <Property Name="ShiftX" />
        <Property Name="ShiftY" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>ScaleShift</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" DisplayName="ScaleX" />
              <Property Name="Y" DisplayName="ScaleY" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bv:CreateTextureScale">
                <bv:X>1</bv:X>
                <bv:Y>1</bv:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>scale</gl:UniformName>
                <gl:ShaderName>Image</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="X" DisplayName="ShiftX" />
              <Property Name="Y" DisplayName="ShiftY" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bv:CreateTextureShift">
                <bv:X>0</bv:X>
                <bv:Y>0</bv:Y>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateUniform">
                <gl:UniformName>shift</gl:UniformName>
                <gl:ShaderName>Image</gl:ShaderName>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="5" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawMesh">
          <gl:ShaderName>Image</gl:ShaderName>
          <gl:MeshName>Quad</gl:MeshName>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="5" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="7" Label="Source3" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="5" To="7" Label="Source1" />
      <Edge From="6" To="7" Label="Source2" />
      <Edge From="7" To="9" Label="Source1" />
      <Edge From="8" To="9" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>